opentrons/protocol-designer 4.0.5
schemaVersion: 4
protocolName: Bead.purification
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: left}
modules:
  magneticModuleV1: {slot: 10}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 200 µL (slot 3): {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 3}
  mag_plate: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: magneticModuleV1}
  resevoir: {definitionId: opentrons/usascientific_12_reservoir_22ml/1, slot: 4}
  Elution plate: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 2}
  Trash (1): {definitionId: opentrons/axygen_1_reservoir_90ml/1, slot: 8}
  Opentrons 96 Filter Tip Rack 200 µL (slot 5): {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 5}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
ingredients:
  - Ethanol 1: {serialize: true}
  - Sample: {serialize: true}
  - Beads: {serialize: true}
  - EB buffer: {serialize: true}
ingredLocations:
  mag_plate:
    Sample {volume: 50}: A1-H1, A2-H2, A3-H3
  resevoir:
    Beads {volume: 20000}: A1
    Ethanol 1 {volume: 20000}: A2
    EB buffer {volume: 10000}: A3
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 75
  path: single
  changeTip: always
  aspirate_labware: resevoir
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 10
  aspirate_mix_volume: 200
  aspirate_mmFromBottom: 1
  dispense_labware: mag_plate
  dispense_wells: A1
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 75
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 75
  path: single
  changeTip: always
  aspirate_labware: resevoir
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 5
  aspirate_mix_volume: 200
  aspirate_mmFromBottom: 1
  dispense_labware: mag_plate
  dispense_wells: A2
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 75
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 75
  path: single
  changeTip: always
  aspirate_labware: resevoir
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 5
  aspirate_mix_volume: 200
  aspirate_mmFromBottom: 1
  dispense_labware: mag_plate
  dispense_wells: A3
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 75
  dispense_mmFromBottom: 0.5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV1
  magnetAction: engage
  engageHeight: 10
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: mag_plate
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Trash (1)
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: mag_plate
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Trash (1)
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: mag_plate
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: Trash (1)
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 120
  path: single
  changeTip: always
  aspirate_labware: resevoir
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: mag_plate
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 120
  path: single
  changeTip: always
  aspirate_labware: resevoir
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: mag_plate
  dispense_wells: A2
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 120
  path: single
  changeTip: always
  aspirate_labware: resevoir
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: mag_plate
  dispense_wells: A3
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: mag_plate
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Trash (1)
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: mag_plate
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Trash (1)
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: mag_plate
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: Trash (1)
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 120
  path: single
  changeTip: always
  aspirate_labware: resevoir
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: mag_plate
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 120
  path: single
  changeTip: always
  aspirate_labware: resevoir
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: mag_plate
  dispense_wells: A2
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 120
  path: single
  changeTip: always
  aspirate_labware: resevoir
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: mag_plate
  dispense_wells: A3
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: mag_plate
  aspirate_wells: A1
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  aspirate_mmFromBottom: 0
  dispense_labware: Trash (1)
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: mag_plate
  aspirate_wells: A2
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  aspirate_mmFromBottom: 0
  dispense_labware: Trash (1)
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: mag_plate
  aspirate_wells: A3
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  aspirate_mmFromBottom: 0
  dispense_labware: Trash (1)
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: resevoir
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: mag_plate
  dispense_wells: A1
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 30
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: resevoir
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: mag_plate
  dispense_wells: A2
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 30
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: resevoir
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: mag_plate
  dispense_wells: A3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 30
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 45
  path: single
  changeTip: always
  aspirate_labware: mag_plate
  aspirate_wells: A1
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  aspirate_mmFromBottom: 0
  dispense_labware: Elution plate
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 45
  path: single
  changeTip: always
  aspirate_labware: mag_plate
  aspirate_wells: A2
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  aspirate_mmFromBottom: 0
  dispense_labware: Elution plate
  dispense_wells: A2
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 45
  path: single
  changeTip: always
  aspirate_labware: mag_plate
  aspirate_wells: A3
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  aspirate_mmFromBottom: 0
  dispense_labware: Elution plate
  dispense_wells: A3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_multi_gen2, labware: Opentrons 96 Filter Tip Rack 200 µL (slot 3), well: A1}
- aspirate: {pipette: p300_multi_gen2, volume: 200, labware: resevoir, well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 200, labware: resevoir, well: A1, offsetFromBottomMm: 1, flowRate: 94}
- aspirate: {pipette: p300_multi_gen2, volume: 200, labware: resevoir, well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 200, labware: resevoir, well: A1, offsetFromBottomMm: 1, flowRate: 94}
- aspirate: {pipette: p300_multi_gen2, volume: 200, labware: resevoir, well: A1, offsetFromBottomMm: 1, flowRate: 94}
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